PsychoPy2experiment version="1.77.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = VerbGen
  Units = use prefs
  Saved data folder = Verbal_Responses
  Screen = 1
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Routines
  Routine FirstHalfInstr
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now that you've had a chance to practice, you're ready to begin the first part of the experiment. If you have any questions before you begin, please let the experimenter know.

        When you are ready, click the mouse to begin.
    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 2.0
      saveMouseState = never
  Routine SecondHalfInstr
    TextComponent pleaseWait
      text = Processing your responses... Please get the experimenter.
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent feedback
      text = You have completed the baseline round. In this experimental section you will be doing the same thing, except now your main job is to increase how creative your verb responses are by 20%. This is only for the creative trials. We have been monitoring your performance, and have been tracking how creative your verbs have been. A person you have been paired with has already completed this experiment and was successful in increasing his/her creativity score by 20%. If you can also boost your score by 20%, you will each be given \$5.
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine End_of_Experiment
    TextComponent Complete
      text = You have completed this portion of the study!
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Welcome
    KeyboardComponent key_resp_2
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = all keys
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    TextComponent greeting
      stopVal [condition] = $len(key_resp_2.keys)>0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        During the next part of the experiment, you will be presented with a noun and asked to respond with a verb that is related to the noun. Before seeing the noun, you will be cued to respond in one of two ways. Each condition has an associated color, which you will see on the following screen.

        Please press the spacebar to continue.
    TextComponent greeting_2
      wrapWidth = 0.9
      color = purple
      text = “Normal" means respond with the first verb that comes to mind for you. For example, if the noun was “chair”, you might say “sit”. (Try to avoid saying “to sit” or “sitting” -- just say “sit”.) There are no right or wrong verbs, just say the first one that comes to mind. 
      stopVal [condition] = $len(key_resp_2.keys)>1
      pos = [0, 0.3]
      startVal [condition] = $len(key_resp_2.keys)>0
      letterHeight = 0.08
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    TextComponent greeting_2_2
      wrapWidth = 0.9
      color = darkgreen
      text = 'Creative' means respond with a verb that is creative; many possible verbs could work. 
      stopVal [condition] = $len(key_resp_2.keys)>1
      pos = [0, -.2]
      startVal [condition] = $len(key_resp_2.keys)>0
      letterHeight = 0.08
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    TextComponent greeting_2_4
      wrapWidth = 0.9
      color = black
      text = Press the spacebar to continue
      stopVal [condition] = $len(key_resp_2.keys)>1
      pos = [0, -0.7]
      startVal [condition] = $len(key_resp_2.keys)>0
      letterHeight = 0.08
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    TextComponent greeting_3
      stopVal [condition] = $len(key_resp_2.keys)>2
      startVal [condition] = $len(key_resp_2.keys)>1
      letterHeight = 0.1
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      text:
        First, the cue (normal or creative) will flash on the screen, followed by the noun to respond to. You should always respond with a verb, but only after the noun appears on the screen. Remember that for the normal condition, you should respond with the first verb you think of. For the ‘creative’ condition, please respond quickly, but thoughtfully, to the noun prompt.

        Please press the spacebar to continue.
    TextComponent greeting_4
      startVal [condition] = $len(key_resp_2.keys)>2
      letterHeight = 0.1
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      text:
        You will have 8 seconds to say your response. When you see the microphone on the screen, that means the computer is recording.

        These first few trials are just for practice. You will also get feedback on how loudly you are speaking so you can adjust the level accordingly. If you have any questions during the practice, please let the experimenter know.

        When you are ready, click the mouse to begin.
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [condition] = $len(key_resp_2.keys)>2
      saveMouseState = final
    CodeComponent code_3
      Begin Experiment:
        import pyo
  Routine feedback_2
    TextComponent text_2
      text = Press the spacebar to continue
      pos = [0, -.7]
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 2
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    CodeComponent code
  Routine trial
    TextComponent cue
      opacity = 0.5
      color [set every repeat] = $cueColor
      text [set every repeat] = $prompt
      stopVal [duration (s)] = 1.0
      pos = [0, 0.15]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 1.0
      letterHeight = 0.05
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    TextComponent word
      color [set every repeat] = $cueColor
      text [set every repeat] = $noun
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.5
      letterHeight = 0.2
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    MicrophoneComponent recording
      stereo = True
      stopVal [duration (s)] = 8
      durationEstim = 8
      startVal [time (s)] = 2.5
    ImageComponent image
      stopVal [duration (s)] = 8
      pos = [0, -.3]
      startVal [time (s)] = 2.5
      image = mic.png
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  Routine End_Practice
    TextComponent Begin
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now that you've had a chance to practice, you're ready to begin the first part of the experiment. If you have any questions before you begin, please let the experimenter know.

        When you are ready, click the mouse to begin.
    MouseComponent Mouse_Begin
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine EndOfTask
Flow
  Routine Welcome
  LoopInitiator Practice_Trials loopType="TrialHandler"
    conditionsFile = Practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'prompt': u'normal', 'noun': u'bowl', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'comb', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'fence', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'basket', 'cueColor': u'green'},
      {'prompt': u'normal', 'noun': u'stage', 'cueColor': u'purple'}]
    Routine trial
  LoopTerminator Practice_Trials
  Routine End_Practice
  LoopInitiator Main_Trials loopType="TrialHandler"
    conditionsFile = Main.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'house', 'cueColor': u'green'},
      {'prompt': u'normal', 'noun': u'rock', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'card', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'shoe', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'oath', 'cueColor': u'green'},
      {'prompt': u'normal', 'noun': u'birth', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'street', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'lamp', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'canoe', 'cueColor': u'green'},
      {'prompt': u'normal', 'noun': u'needle', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'home', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'office', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'belt', 'cueColor': u'green'},
      {'prompt': u'normal', 'noun': u'finger', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'blade', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'oven', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'fist', 'cueColor': u'green'},
      {'prompt': u'normal', 'noun': u'cart', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'tongue', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'shovel', 'cueColor': u'green'},
      {'prompt': u'creative', 'noun': u'dish', 'cueColor': u'green'}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
    Routine trial
  LoopTerminator Main_Trials
  Routine End_of_Experiment
