PsychoPy2experiment version="1.80.00"
Settings
  Data filename = 'VerbGen_MR_data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = VerbGen
  Units = use prefs
  Screen = 1
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Routines
  Routine initial_wait
    TextComponent fixation_9s
      text = +
      stopVal [duration (s)] = 9.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent wait_for_sync
      forceEndRoutine = True
      allowedKeys [set every repeat] = sync
      startVal [time (s)] = 9.0
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    TextComponent text_2
      text = +
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 7.5
      letterHeight = 0.3
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  Routine trial
    TextComponent cue
      opacity = 0.5
      color [set every repeat] = $cueColor
      text [set every repeat] = $prompt
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent word
      color [set every repeat] = $cueColor
      text [set every repeat] = $noun
      stopVal [duration (s)] = 5.5
      startVal [time (s)] = 1.5
      letterHeight = 0.2
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    ImageComponent image
      stopVal [duration (s)] = 5.5
      pos = [0, -.3]
      startVal [time (s)] = 1.5
      image = mic.png
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    KeyboardComponent end_trial_sync
      forceEndRoutine = True
      allowedKeys [set every repeat] = sync
      startVal [time (s)] = 7.0
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    CodeComponent code
      Begin Routine:
        thisExp.addData('MR_clock', MR_clock.getTime())
  Routine Welcome
    TextComponent greeting
      text = Verb gen task - MRI
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent launch_scan
      End Routine:
        from psychopy.hardware.emulator import launchScan

        MR_settings = {
            'TR': 2.5, # duration (sec) per volume
            'volumes': 4+3*24+7, # 4 init TR + 3TR * 24 trials + 7 TR hemodynamic tail
            'sync': 'slash', # character to use as the sync timing event; assumed to come at start of a volume
            'skip': 0,
            'sound': True
        }
        MR_clock = core.Clock()
        sync = MR_settings['sync']

        vol = launchScan(win, MR_settings, globalClock=MR_clock)
  Routine End_of_Experiment
    TextComponent Complete
      color = gray
      stopVal [duration (s)] = 17.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of the word task.
        Scan will finish soon.
    CodeComponent end_time_stamp
      Begin Routine:
        thisExp.addData('MR_clock', MR_clock.getTime())
  Routine jitter_trial
    TextComponent text
      stopVal [duration (frames)] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Welcome
  Routine initial_wait
  LoopInitiator Main_Trials loopType="TrialHandler"
    conditionsFile = Main4x6.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'darkgreen'},
      {'prompt': u'creative', 'noun': u'house', 'cueColor': u'darkgreen'},
      {'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'darkgreen'},
      {'prompt': u'creative', 'noun': u'house', 'cueColor': u'darkgreen'},
      {'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'darkgreen'},
      {'prompt': u'creative', 'noun': u'house', 'cueColor': u'darkgreen'},
      {'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'darkgreen'},
      {'prompt': u'creative', 'noun': u'house', 'cueColor': u'darkgreen'},
      {'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'darkgreen'},
      {'prompt': u'creative', 'noun': u'house', 'cueColor': u'darkgreen'},
      {'prompt': u'normal', 'noun': u'leaf', 'cueColor': u'purple'},
      {'prompt': u'normal', 'noun': u'taxi', 'cueColor': u'purple'},
      {'prompt': u'creative', 'noun': u'coal', 'cueColor': u'darkgreen'}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
    Routine trial
    Routine jitter_trial
  LoopTerminator Main_Trials
  Routine End_of_Experiment
